CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your workspace, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load the images by matching files in the folder against the unique text pattern for each stain: D.TIF for DAPI, F.TIF for the FITC image, R.TIF for the rhodamine image. The three images together comprise an image set.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "405.tif")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "488.tif")
    Name to assign these images:MIRO160mer
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceOrSuppressFeatures:[module_num:5|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enabled:False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
    Select the input image:Hoechst
    Name the output image:Hoechst_enhanced
    Select the operation:Enhance
    Feature size:70
    Feature type:Speckles
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    Speed and accuracy:Fast
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
RescaleIntensity:[module_num:6|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enabled:False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
    Select the input image:MIRO160mer
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identify the nuclei from the DAPI image. Three-class thresholding performs better than the default two-class thresholding in this case.']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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:30
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:0.45
    Lower and upper bounds on threshold:0.00195,0.01
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ExpandOrShrinkObjects:[module_num:8|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
    Select the input objects:Nuclei
    Name the output objects:Expand_Nuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:10
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
ExpandOrShrinkObjects:[module_num:9|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
    Select the input objects:Nuclei
    Name the output objects:Expand_Nuclei_for_mask
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:15
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
MaskImage:[module_num:10|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
    Select the input image:MIRO160mer
    Name the output image:Subtract_perinucleus_Miro160mer
    Use objects or an image as a mask?:Objects
    Select object for mask:Expand_Nuclei_for_mask
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:Subtract_perinucleus_Miro160mer
    Name the primary objects to be identified:edge_spots
    Typical diameter of objects, in pixel units (Min,Max):5,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0035,1.0
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    Lower outlier fraction:0.3
    Upper outlier fraction:0.1
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:6
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
MeasureObjectIntensity:[module_num:12|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
    Select images to measure:Subtract_perinucleus_Miro160mer
    Select objects to measure:edge_spots

FilterObjects:[module_num:13|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
    Select the objects to filter:edge_spots
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensityEdge_Subtract_perinucleus_Miro160mer
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
IdentifyTertiaryObjects:[module_num:14|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notes:['Identify the cytoplasm by "subtracting" the nuclei objects from the cell objects.']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
    Select the larger identified objects:Expand_Nuclei
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Perinuclear_region
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:15|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
    Select images to measure:Hoechst
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:16|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
    Select images to measure:MIRO160mer
    Select objects to measure:Expand_Nuclei, Perinuclear_region

CalculateMoments:[module_num:17|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
    Hidden:1
    Hidden:2
    Select an image to measure:MIRO160mer
    Select objects to measure:Perinuclear_region
    Select objects to measure:Expand_Nuclei
    Moments to compute:Mean,Standard Deviation,Skewness,Kurtosis

CalculateHistogram:[module_num:18|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enabled:False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
    Hidden:1
    Hidden:2
    Hidden:1
    Select an image to measure:MIRO160mer
    Select objects to measure:Expand_Nuclei
    Select objects to measure:Perinuclear_region
    Number of bins:50

CalculateGini:[module_num:19|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
    Hidden:1
    Hidden:2
    Select an image to measure:MIRO160mer
    Select objects to measure:Expand_Nuclei
    Select objects to measure:Perinuclear_region

MeasureImageIntensity:[module_num:20|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
    Select images to measure:MIRO160mer, Subtract_perinucleus_Miro160mer
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
SaveImages:[module_num:21|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:MIRO160mer
    Select method for constructing file names:From image filename
    Select image name for file prefix:MIRO160mer
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:22|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv’s.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|Z:\\Christina\\export_issue_test\\moments_test\\post_revision\\241223_siRNA_motor_JNK_wt_DRH
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei|Intensity_MedianIntensity_Hoechst,Nuclei|Intensity_MeanIntensity_Hoechst,Nuclei|Intensity_StdIntensity_Hoechst,Nuclei|Intensity_IntegratedIntensity_Hoechst,Nuclei|Number_Object_Number,Image|Intensity_StdIntensity_Subtract_perinucleus_Miro160mer,Image|Intensity_StdIntensity_MIRO160mer,Image|Intensity_TotalArea_Subtract_perinucleus_Miro160mer,Image|Intensity_TotalArea_MIRO160mer,Image|Intensity_UpperQuartileIntensity_Subtract_perinucleus_Miro160mer,Image|Intensity_UpperQuartileIntensity_MIRO160mer,Image|Intensity_MADIntensity_Subtract_perinucleus_Miro160mer,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:All_measurements.csv
    Use the object name for the file name?:No
    Data to export:edge_spots
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Expand_Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Perinuclear_region
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
